[General settings]
name = Multi-Qubit Pulse Generator
version = 1.4
driver_path = MultiQubit_PulseGenerator
signal_generator = True
signal_analyzer = True

[Sequence]
datatype = COMBO
combo_def_1 = Rabi
combo_def_2 = CP/CPMG
combo_def_3 = Pulse train
combo_def_4 = 1-QB Randomized Benchmarking
combo_def_5 = 2-QB Randomized Benchmarking
combo_def_6 = Spin-locking
combo_def_7 = Readout training
combo_def_8 = Custom
group = Sequence
section = Sequence
show_in_measurement_dlg = True

[Number of qubits]
datatype = COMBO
def_value = 16
group = Sequence
section = Sequence
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Custom Python file]
datatype = PATH
tooltip = Python file with custom Sequence class. The class must be named "CustomSequence"
state_quant = Sequence
state_value_1 = Custom
group = Sequence
section = Sequence

[Pulse spacing]
datatype = DOUBLE
unit = s
def_value = 20E-9
low_lim = 0
group = Sequence
section = Sequence
show_in_measurement_dlg = True

[Local XY Control]
datatype = BOOLEAN
def_value = True
group = Sequence
section = Sequence

[Dynamic duration]
datatype = BOOLEAN
def_value = False
group = Sequence
section = Sequence
tooltip = Requires Pathwave TSE

[Pulse]
datatype = COMBO
combo_def_1 = Xp
combo_def_2 = X2p
combo_def_3 = Yp
combo_def_4 = Y2p
combo_def_5 = Zp
combo_def_6 = Z2p
combo_def_7 = CPh
state_quant = Sequence
state_value_1 = Pulse train
group = Pulse train
section = Sequence

[# of pulses]
datatype = DOUBLE
def_value = 1
low_lim = 0
state_quant = Sequence
state_value_1 = Pulse train
group = Pulse train
section = Sequence

[Alternate pulse direction]
datatype = BOOLEAN
def_value = False
state_quant = Sequence
state_value_1 = Pulse train
group = Pulse train
section = Sequence

[# of pi pulses]
datatype = DOUBLE
tooltip = Number of refocusing pulses. Set to -1 for generating pulse sequences for T1 experiments
def_value = 1
low_lim = -1
state_quant = Sequence
state_value_1 = CP/CPMG
group = CPMG
section = Sequence

[Sequence duration]
datatype = DOUBLE
unit = s
def_value = 1E-6
low_lim = 0
state_quant = Sequence
state_value_1 = CP/CPMG
group = CPMG
section = Sequence

[Add pi pulses to Q]
datatype = BOOLEAN
def_value = True
state_quant = Sequence
state_value_1 = CP/CPMG
group = CPMG
section = Sequence

[Edge-to-edge pulses]
datatype = BOOLEAN
def_value = False
state_quant = Sequence
state_value_1 = CP/CPMG
group = CPMG
section = Sequence

[Add last pi/2 pulse to Q]
datatype = BOOLEAN
def_value = False
state_quant = Sequence
state_value_1 = CP/CPMG
group = CPMG
section = Sequence

[Last pulse phase]
datatype = DOUBLE
unit = deg
def_value = 0
state_quant = Sequence
state_value_1 = CP/CPMG
group = CPMG
section = Sequence
tooltip = Phase of second pi/2 pulse

[Dynamic last pulse phase]
datatype = BOOLEAN
def_value = False
state_quant = Sequence
state_value_1 = CP/CPMG
group = CP/CPMG - Hardware-dynamic parameters
section = Sequence
tooltip = Requires Pathwave TSE

[Drive pulse duration]
datatype = DOUBLE
unit = s
def_value = 1E-6
low_lim = 0
state_quant = Sequence
state_value_1 = Spin-locking
group = Spin-locking
section = Sequence

[Drive pulse phase]
datatype = DOUBLE
unit = deg
def_value = 0
state_quant = Sequence
state_value_1 = Spin-locking
group = Spin-locking
section = Sequence

[Pulse sequence]
datatype = COMBO
combo_def_1 = SL-3
combo_def_2 = SL-5a
combo_def_3 = SL-5b
def_value = SL-3
state_quant = Sequence
state_value_1 = Spin-locking
group = Spin-locking
section = Sequence

[Drive pulse amplitude #1]
datatype = DOUBLE
unit = V
def_value = 0
state_quant = Sequence
state_value_1 = Spin-locking
group = Spin-locking
section = Sequence
tooltip = Drive pulse amplitude for qubit #1

[Drive pulse amplitude #2]
datatype = DOUBLE
unit = V
def_value = 0
state_quant = Sequence
state_value_1 = Spin-locking
group = Spin-locking
section = Sequence
tooltip = Drive pulse amplitude for qubit #2

[Drive pulse amplitude #3]
datatype = DOUBLE
unit = V
def_value = 0
state_quant = Sequence
state_value_1 = Spin-locking
group = Spin-locking
section = Sequence
tooltip = Drive pulse amplitude for qubit #3

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

[Number of Cliffords]
datatype = DOUBLE
def_value = 17
low_lim = 0
group = Randomized Benchmarking
section = Sequence
state_quant = Sequence
state_value_1 = 1-QB Randomized Benchmarking
state_value_2 = 2-QB Randomized Benchmarking
show_in_measurement_dlg = True

[Randomize]
datatype = DOUBLE
def_value = 0
group = Randomized Benchmarking
tooltip = Randomize gate sequence only if "Randomize" value changes or "Number of Cliffords" changes
section = Sequence
state_quant = Sequence
state_value_1 = 1-QB Randomized Benchmarking
state_value_2 = 2-QB Randomized Benchmarking
show_in_measurement_dlg = True

[Write sequence as txt file]
datatype = BOOLEAN
def_value = 0
group = Randomized Benchmarking
section = Sequence
tooltip = Save txt file for the sequence generated
state_quant = Sequence
state_value_1 = 1-QB Randomized Benchmarking
state_value_2 = 2-QB Randomized Benchmarking

[Output multiple sequences]
datatype = BOOLEAN
def_value = 0
group = Randomized Benchmarking
tooltip = Output multiple randomized gate sequences.
section = Sequence
state_quant = Sequence
state_value_1 = 1-QB Randomized Benchmarking
state_value_2 = 2-QB Randomized Benchmarking
show_in_measurement_dlg = True

[Number of multiple sequences]
datatype = DOUBLE
def_value = 1
low_lim = 1
group = Randomized Benchmarking
tooltip = Number of multiple randomize gate sequences to output.
section = Sequence
state_quant = Output multiple sequences
state_value_1 = 1
show_in_measurement_dlg = True

[Align RB waveforms to end]
datatype = BOOLEAN
def_value = 1
group = Randomized Benchmarking
section = Sequence
state_quant = Output multiple sequences
state_value_1 = 1
show_in_measurement_dlg = True

[Simultaneous pulses]
datatype = BOOLEAN
tooltip = If False, all pulses are separated in time.
def_value = 1
group = Randomized Benchmarking
section = Sequence
state_quant = Sequence
state_value_1 = 1-QB Randomized Benchmarking
state_value_2 = 2-QB Randomized Benchmarking

[Qubit 1 to Benchmark]
datatype = COMBO
def_value = 1
state_quant = Sequence
state_value_1 = 2-QB Randomized Benchmarking
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Qubit 2 to Benchmark]
datatype = COMBO
def_value = 2
state_quant = Sequence
state_value_1 = 2-QB Randomized Benchmarking
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Native 2-QB gate]
datatype = COMBO
def_value = CZ
group = Randomized Benchmarking
combo_def_1 = CZ
combo_def_2 = iSWAP
section = Sequence
state_quant = Sequence
state_value_1 = 2-QB Randomized Benchmarking
show_in_measurement_dlg = True

[Interleave 1-QB Gate]
datatype = BOOLEAN
def_value = 0
state_quant = Sequence
state_value_1 = 1-QB Randomized Benchmarking
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True

[Interleaved 1-QB Gate]
datatype = COMBO
combo_def_1 = Ref
combo_def_2 = I
combo_def_3 = Xp
combo_def_4 = Xm
combo_def_5 = X2p
combo_def_6 = X2m
combo_def_7 = Yp
combo_def_8 = Ym
combo_def_9 = Y2p
combo_def_10 = Y2m
combo_def_11 = VZp
combo_def_12 = Zp
combo_def_13 = Ilong
state_quant = Interleave 1-QB Gate
state_value_1 = 1
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True

[Interleave 2-QB Gate]
datatype = BOOLEAN
def_value = 0
state_quant = Sequence
state_value_1 = 2-QB Randomized Benchmarking
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True

[Interleaved 2-QB Gate]
datatype = COMBO
combo_def_1 = CZ
combo_def_2 = CZEcho
combo_def_3 = iSWAP
combo_def_4 = I
state_quant = Interleave 2-QB Gate
state_value_1 = 1
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True

[Find the cheapest recovery Clifford]
datatype = BOOLEAN
def_value = 1
state_quant = Sequence
state_value_1 = 2-QB Randomized Benchmarking
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True

[Use a look-up table]
datatype = BOOLEAN
def_value = 1
state_quant = Find the cheapest recovery Clifford
state_value_1 = 1
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True

[File path of the look-up table]
datatype = PATH
state_quant = Use a look-up table
state_value_1 = 1
group = Randomized Benchmarking
section = Sequence
show_in_measurement_dlg = True

[Training type]
datatype = COMBO
def_value = All combinations
combo_def_1 = Specific qubit
combo_def_2 = All qubits at once
combo_def_3 = All combinations
state_quant = Sequence
state_value_1 = Readout training
tooltip = For "All combinations", (Number of states)^(Number of qubits) training data sets are required.  For other options, (Number of states) training sets are required
group = Readout training
section = Sequence
show_in_measurement_dlg = True

[Training, qubit]
datatype = DOUBLE
state_quant = Training type
state_value_1 = Specific qubit
def_value = 1
low_lim = -1
group = Readout training
section = Sequence
show_in_measurement_dlg = True

[Training, input state]
datatype = DOUBLE
def_value = 0
low_lim = -1
state_quant = Sequence
state_value_1 = Readout training
group = Readout training
section = Sequence
show_in_measurement_dlg = True

[Train all states at once]
datatype = BOOLEAN
def_value = 0
group = Readout training
section = Sequence
tooltip = If checked, the driver will create training waveforms for all possible states
state_quant = Sequence
state_value_1 = Readout training
show_in_measurement_dlg = True

[Parameter #1]
datatype = DOUBLE
def_value = 0.0
state_quant = Sequence
state_value_1 = Custom
group = Custom
section = Sequence

[Parameter #2]
datatype = DOUBLE
def_value = 0.0
state_quant = Sequence
state_value_1 = Custom
group = Custom
section = Sequence

[Parameter #3]
datatype = DOUBLE
def_value = 0.0
state_quant = Sequence
state_value_1 = Custom
group = Custom
section = Sequence

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

[Sample rate]
datatype = DOUBLE
def_value = 1.0E9
unit = Hz
group = Waveform
section = Waveform
show_in_measurement_dlg = True

[Trim waveform to sequence]
label = Adjust waveform to sequence length
tooltip = Automatically adjusts the number of points in the waveform
datatype = BOOLEAN
def_value = 1
group = Waveform
section = Waveform

[Number of points]
datatype = DOUBLE
def_value = 240E3
state_quant = Trim waveform to sequence
state_value = False
group = Waveform
section = Waveform
show_in_measurement_dlg = True

[Align pulses to end of waveform]
datatype = BOOLEAN
state_quant = Trim waveform to sequence
state_value = False
def_value = 0
group = Waveform
section = Waveform

[First pulse delay]
datatype = DOUBLE
unit = s
def_value = 100E-9
group = Delays
section = Waveform

[Qubit 1 XY Delay]
datatype = DOUBLE
def_value = 0
unit = s
group = Delays
section = Waveform

[Qubit 1 Z Delay]
datatype = DOUBLE
def_value = 0
unit = s
group = Delays
section = Waveform

[Qubit 2 XY Delay]
datatype = DOUBLE
def_value = 0
unit = s
group = Delays
section = Waveform

[Qubit 2 Z Delay]
datatype = DOUBLE
def_value = 0
unit = s
group = Delays
section = Waveform

[Qubit 3 XY Delay]
datatype = DOUBLE
def_value = 0
unit = s
group = Delays
section = Waveform

[Qubit 3 Z Delay]
datatype = DOUBLE
def_value = 0
unit = s
group = Delays
section = Waveform

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

[Generate waveform primitives]
datatype = BOOLEAN
def_value = False
group = Primitives
section = Primitives
tooltip = Requires Pathwave TSE

[Apply phase modulation to qubit primitives]
datatype = BOOLEAN
def_value = False
group = Qubit primitives
section = Primitives
state_quant = Generate waveform primitives
state_value = True

[Apply amplitude modulation to qubit primitives]
datatype = BOOLEAN
def_value = False
group = Qubit primitives
section = Primitives
state_quant = Generate waveform primitives
state_value = True

[Apply frequency modulation to readout primitives]
datatype = BOOLEAN
def_value = True
group = Readout primitives
section = Primitives
state_quant = Generate waveform primitives
state_value = True

[Apply phase modulation to readout primitives]
datatype = BOOLEAN
def_value = True
group = Readout primitives
section = Primitives
state_quant = Generate waveform primitives
state_value = True

[Apply amplitude modulation to readout primitives]
datatype = BOOLEAN
def_value = True
group = Readout primitives
section = Primitives
state_quant = Generate waveform primitives
state_value = True

[Enable hardware-dynamic amplitudes]
datatype = BOOLEAN
def_value = False
group = Hardware-dynamic parameters
section = Primitives
state_quant = Generate waveform primitives
state_value = True
tooltip = Requires Pathwave TSE

[Enable hardware-dynamic frequencies]
datatype = BOOLEAN
def_value = False
group = Hardware-dynamic parameters
section = Primitives
state_quant = Generate waveform primitives
state_value = True
tooltip = Requires Pathwave TSE

[Pulse type]
datatype = COMBO
combo_def_1 = Gaussian
combo_def_2 = Square
combo_def_3 = Ramp
combo_def_4 = Cosine
group = Pulse settings
section = 1-QB gates XY

[Truncation range]
datatype = DOUBLE
def_value = 3
state_quant = Pulse type
state_value_1 = Gaussian
group = Pulse settings
section = 1-QB gates XY

[Start at zero]
datatype = BOOLEAN
def_value = 0
state_quant = Pulse type
state_value_1 = Gaussian
group = Pulse settings
section = 1-QB gates XY

[Use DRAG]
datatype = BOOLEAN
def_value = False
group = Pulse settings
section = 1-QB gates XY

[Uniform amplitude]
label = Uniform amplitude
datatype = BOOLEAN
def_value = False
group = Pulse settings
section = 1-QB gates XY

[Amplitude]
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude
state_value = True
group = Pulse settings
section = 1-QB gates XY
show_in_measurement_dlg = True

[Uniform pulse shape]
datatype = BOOLEAN
def_value = True
group = Pulse settings
section = 1-QB gates XY

[Width]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse settings
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 1
show_in_measurement_dlg = True

[Plateau]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse settings
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 1
show_in_measurement_dlg = True

[Amplitude #1]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude
state_value = False
group = Pulse #1
section = 1-QB gates XY
show_in_measurement_dlg = True

[Width #1]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse #1
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 0

[Plateau #1]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse #1
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 0

[Frequency #1]
label = Frequency
datatype = DOUBLE
unit = Hz
group = Pulse #1
section = 1-QB gates XY

[DRAG scaling #1]
label = DRAG scaling
datatype = DOUBLE
unit = s
def_value = .25E-9
state_quant = Use DRAG
state_value = 1
group = Pulse #1
section = 1-QB gates XY

[DRAG frequency detuning #1]
label = DRAG frequency detuning
datatype = DOUBLE
unit = Hz
def_value = 0
state_quant = Use DRAG
state_value = 1
group = Pulse #1
section = 1-QB gates XY

[Hardware-dynamic XY amplitude #1]
label = Hardware-dynamic amplitude
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic amplitudes
state_value = True
group = Pulse #1
section = 1-QB gates XY
show_in_measurement_dlg = False

[Hardware-dynamic frequency #1]
label = Hardware-dynamic frequency
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic frequencies
state_value = True
group = Pulse #1
section = 1-QB gates XY
show_in_measurement_dlg = False

[Amplitude #2]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude
state_value = False
group = Pulse #2
section = 1-QB gates XY
show_in_measurement_dlg = True

[Width #2]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse #2
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 0

[Plateau #2]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse #2
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 0

[Frequency #2]
label = Frequency
datatype = DOUBLE
unit = Hz
group = Pulse #2
section = 1-QB gates XY

[DRAG scaling #2]
label = DRAG scaling
datatype = DOUBLE
unit = s
def_value = .25E-9
state_quant = Use DRAG
state_value = 1
group = Pulse #2
section = 1-QB gates XY

[DRAG frequency detuning #2]
label = DRAG frequency detuning
datatype = DOUBLE
unit = Hz
def_value = 0
state_quant = Use DRAG
state_value = 1
group = Pulse #2
section = 1-QB gates XY

[Hardware-dynamic XY amplitude #2]
label = Hardware-dynamic amplitude
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic amplitudes
state_value = True
group = Pulse #2
section = 1-QB gates XY
show_in_measurement_dlg = False

[Hardware-dynamic frequency #2]
label = Hardware-dynamic frequency
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic frequencies
state_value = True
group = Pulse #2
section = 1-QB gates XY
show_in_measurement_dlg = False

[Amplitude #3]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude
state_value = False
group = Pulse #3
section = 1-QB gates XY
show_in_measurement_dlg = True

[Width #3]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse #3
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 0

[Plateau #3]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse #3
section = 1-QB gates XY
state_quant = Uniform pulse shape
state_value = 0

[Frequency #3]
label = Frequency
datatype = DOUBLE
unit = Hz
group = Pulse #3
section = 1-QB gates XY

[DRAG scaling #3]
label = DRAG scaling
datatype = DOUBLE
unit = s
def_value = .25E-9
state_quant = Use DRAG
state_value = 1
group = Pulse #3
section = 1-QB gates XY

[DRAG frequency detuning #3]
label = DRAG frequency detuning
datatype = DOUBLE
unit = Hz
def_value = 0
state_quant = Use DRAG
state_value = 1
group = Pulse #3
section = 1-QB gates XY

[Hardware-dynamic XY amplitude #3]
label = Hardware-dynamic amplitude
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic amplitudes
state_value = True
group = Pulse #3
section = 1-QB gates XY
show_in_measurement_dlg = False

[Hardware-dynamic frequency #3]
label = Hardware-dynamic frequency
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic frequencies
state_value = True
group = Pulse #3
section = 1-QB gates XY
show_in_measurement_dlg = False

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

[Pulse type, Z]
label = Pulse type
datatype = COMBO
combo_def_1 = Gaussian
combo_def_2 = Square
combo_def_3 = Ramp
combo_def_4 = Cosine
group = Pulse settings
section = 1-QB gates Z

[Truncation range, Z]
label = Truncation range
datatype = DOUBLE
def_value = 3
state_quant = Pulse type, Z
state_value_1 = Gaussian
group = Pulse settings
section = 1-QB gates Z

[Start at zero, Z]
label = Start at zero
datatype = BOOLEAN
def_value = 0
state_quant = Pulse type, Z
state_value_1 = Gaussian
group = Pulse settings
section = 1-QB gates Z

[Uniform amplitude, Z]
label = Uniform amplitude
datatype = BOOLEAN
def_value = False
group = Pulse settings
section = 1-QB gates Z

[Amplitude, Z]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude, Z
state_value = True
group = Pulse settings
section = 1-QB gates Z
show_in_measurement_dlg = True

[Uniform pulse shape, Z]
datatype = BOOLEAN
def_value = True
group = Pulse settings
section = 1-QB gates Z

[Width, Z]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse settings
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 1
show_in_measurement_dlg = True

[Plateau, Z]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse settings
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 1
show_in_measurement_dlg = True

[Amplitude #1, Z]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude, Z
state_value = False
group = Pulse #1
section = 1-QB gates Z
show_in_measurement_dlg = True

[Width #1, Z]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse #1
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 0

[Plateau #1, Z]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse #1
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 0

[Hardware-dynamic Z amplitude #1]
label = Hardware-dynamic amplitude
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic amplitudes
state_value = True
group = Pulse #1
section = 1-QB gates Z
show_in_measurement_dlg = False

[Amplitude #2, Z]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude, Z
state_value = False
group = Pulse #2
section = 1-QB gates Z
show_in_measurement_dlg = True

[Width #2, Z]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse #2
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 0

[Plateau #2, Z]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse #2
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 0

[Hardware-dynamic Z amplitude #2]
label = Hardware-dynamic amplitude
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic amplitudes
state_value = True
group = Pulse #2
section = 1-QB gates Z
show_in_measurement_dlg = False

[Amplitude #3, Z]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
state_quant = Uniform amplitude, Z
state_value = False
group = Pulse #3
section = 1-QB gates Z
show_in_measurement_dlg = True

[Width #3, Z]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
group = Pulse #3
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 0

[Plateau #3, Z]
label = Plateau
datatype = DOUBLE
unit = s
group = Pulse #3
section = 1-QB gates Z
state_quant = Uniform pulse shape, Z
state_value = 0

[Hardware-dynamic Z amplitude #3]
label = Hardware-dynamic amplitude
datatype = BOOLEAN
def_value = False
state_quant = Enable hardware-dynamic amplitudes
state_value = True
group = Pulse #3
section = 1-QB gates Z
show_in_measurement_dlg = False

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

[Use global Z offset]
label = Activate
datatype = BOOLEAN
def_value = False
group = Global Z offset
section = Global Z offset

[Extend Z offset to readout]
label = Extend Z offset to readout
datatype = BOOLEAN
def_value = True
state_quant = Use global Z offset
state_value = True
group = Global Z offset
section = Global Z offset

[Time after readout, Z global]
label = Time after readout
datatype = DOUBLE
unit = s
def_value = 10E-9
state_quant = Extend Z offset to readout
state_value = True
group = Global Z offset
section = Global Z offset

[Ringup, Z global]
label = Ring-up time
datatype = DOUBLE
unit = s
def_value = 20E-9
state_quant = Use global Z offset
state_value = True
group = Cosine pulse settings
section = Global Z offset

[Amplitude #1, Z global]
label = Amplitude #1
datatype = DOUBLE
unit = V
def_value = 0.
state_quant = Use global Z offset
state_value = True
low_lim = -1.5
high_lim = 1.5
group = Z offset amplitudes
section = Global Z offset

[Amplitude #2, Z global]
label = Amplitude #2
datatype = DOUBLE
unit = V
def_value = 0.
state_quant = Use global Z offset
state_value = True
low_lim = -1.5
high_lim = 1.5
group = Z offset amplitudes
section = Global Z offset

[Amplitude #3, Z global]
label = Amplitude #3
datatype = DOUBLE
unit = V
def_value = 0.
state_quant = Use global Z offset
state_value = True
low_lim = -1.5
high_lim = 1.5
group = Z offset amplitudes
section = Global Z offset

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

[Use Z pulse during readout]
label = Activate
datatype = BOOLEAN
def_value = False
group = Z pulse during readout
section = Z pulse during readout

[Net zero, Z during readout]
label = Make Net Zero
datatype = BOOLEAN
def_value = False
group = Z pulse during readout
section = Z pulse during readout

[Ringup time, Z during readout]
label = Ring-up time
datatype = DOUBLE
unit = s
def_value = 20E-9
state_quant = Use Z pulse during readout
state_value = True
group = Cosine pulse settings
section = Z pulse during readout

[Amplitude #1, Z during readout]
label = Amplitude #1
datatype = DOUBLE
unit = V
def_value = 0.
state_quant = Use Z pulse during readout
state_value = True
low_lim = -1.5
high_lim = 1.5
group = Z amplitudes during readout
section = Z pulse during readout

[Amplitude #2, Z during readout]
label = Amplitude #2
datatype = DOUBLE
unit = V
def_value = 0.
state_quant = Use Z pulse during readout
state_value = True
low_lim = -1.5
high_lim = 1.5
group = Z amplitudes during readout
section = Z pulse during readout

[Amplitude #3, Z during readout]
label = Amplitude #3
datatype = DOUBLE
unit = V
def_value = 0.
state_quant = Use Z pulse during readout
state_value = True
low_lim = -1.5
high_lim = 1.5
group = Z amplitudes during readout
section = Z pulse during readout

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

[Pulse type, 2QB]
label = Pulse type
datatype = COMBO
combo_def_1 = Gaussian
combo_def_2 = Square
combo_def_3 = Ramp
combo_def_4 = CZ
combo_def_5 = Cosine
combo_def_6 = NetZero
def_value = Cosine
group = 2-QB pulses
section = 2-QB gates

[Truncation range, 2QB]
label = Truncation range
datatype = DOUBLE
def_value = 3
state_quant = Pulse type, 2QB
state_value = Gaussian
group = 2-QB pulses
section = 2-QB gates

[Start at zero, 2QB]
label = Start at zero
datatype = BOOLEAN
def_value = 0
state_quant = Pulse type, 2QB
state_value = Gaussian
group = 2-QB pulses
section = 2-QB gates

[Uniform 2QB pulses]
datatype = BOOLEAN
def_value = True
group = 2-QB pulses
section = 2-QB gates

[Width, 2QB]
label = Width
datatype = DOUBLE
unit = s
def_value = 50E-9
group = 2-QB pulses
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 1
show_in_measurement_dlg = True

[Plateau, 2QB]
label = Plateau
datatype = DOUBLE
unit = s
group = 2-QB pulses
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 1
show_in_measurement_dlg = True

[Fourier terms, 2QB]
label = Fourier Terms
datatype = COMBO
combo_def_1 = One
combo_def_2 = Two
combo_def_3 = Three
combo_def_4 = Four
def_value = One
tooltip = Number of fourier terms used to define the pulseshape of the C-phase gate
group = 2-QB pulses
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[Amplitude, 2QB #1-2]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = Gaussian
state_value_2 = Square
state_value_3 = Ramp
state_value_4 = Cosine
show_in_measurement_dlg = True

[Width, 2QB #1-2]
label = Width
datatype = DOUBLE
unit = s
def_value = 50E-9
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 0

[Plateau, 2QB #1-2]
label = Plateau
datatype = DOUBLE
unit = s
def_value = 0
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 0

[Assume linear dependence, 2QB #1-2]
label = Assume linear dependence
datatype = BOOLEAN
def_value = True
tooltip = Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[df/dV, 2QB #1-2]
label = df/dV
datatype = DOUBLE
unit = Hz/V
def_value = 0.5E9
tooltip = Translating pulseshape from frequency space to voltage assuming a linear dependence
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[f11-f20 initial, 2QB #1-2]
label = f11-f20 initial
datatype = DOUBLE
unit = Hz
def_value = 0.3E9
tooltip = Initial frequency splitting between the |11> state and the |02> state
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[f11-f20 final, 2QB #1-2]
label = f11-f20 final
datatype = DOUBLE
unit = Hz
def_value = 0.05E9
tooltip = Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[Coupling, 2QB #1-2]
label = Coupling
datatype = DOUBLE
unit = Hz
def_value = 0.025E9
tooltip = Coupling strength between |11> state and |02> state
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[L1, 2QB #1-2]
label = L1
datatype = DOUBLE
def_value = 1
tooltip = First fourier coefficient used to define the pulse shape of the C-phase gate.
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Fourier terms, 2QB
state_value_1 = One
state_value_2 = Two
state_value_3 = Three
state_value_4 = Four

[L2, 2QB #1-2]
label = L2
datatype = DOUBLE
def_value = 0
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Fourier terms, 2QB
state_value_1 = Two
state_value_2 = Three
state_value_3 = Four

[L3, 2QB #1-2]
label = L3
datatype = DOUBLE
def_value = 0
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Fourier terms, 2QB
state_value_1 = Three
state_value_2 = Four

[L4, 2QB #1-2]
label = L4
datatype = DOUBLE
def_value = 0
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Fourier terms, 2QB
state_value_1 = Four

[QB1 Phi, 2QB #1-2]
label = QB1 Phase shift (rad)
datatype = DOUBLE
def_value = 0
group = 2-QB pulse #1-2
section = 2-QB gates

[QB2 Phi, 2QB #1-2]
label = QB2 Phase shift (rad)
datatype = DOUBLE
def_value = 0
group = 2-QB pulse #1-2
section = 2-QB gates

[Negative amplitude, 2QB #1-2]
label = Negative amplitude
datatype = BOOLEAN
def_value = False
tooltip = Flip the sign of the amplitude of the CZ pulse
group = 2-QB pulse #1-2
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[Amplitude, 2QB #2-3]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = Gaussian
state_value_2 = Square
state_value_3 = Ramp
state_value_4 = Cosine
show_in_measurement_dlg = True

[Width, 2QB #2-3]
label = Width
datatype = DOUBLE
unit = s
def_value = 50E-9
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 0

[Plateau, 2QB #2-3]
label = Plateau
datatype = DOUBLE
unit = s
def_value = 0
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 0

[Assume linear dependence, 2QB #2-3]
label = Assume linear dependence
datatype = BOOLEAN
def_value = True
tooltip = Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[df/dV, 2QB #2-3]
label = df/dV
datatype = DOUBLE
unit = Hz/V
def_value = 0.5E9
tooltip = Translating pulseshape from frequency space to voltage assuming a linear dependence
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[f11-f20 initial, 2QB #2-3]
label = f11-f20 initial
datatype = DOUBLE
unit = Hz
def_value = 0.3E9
tooltip = Initial frequency splitting between the |11> state and the |02> state
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[f11-f20 final, 2QB #2-3]
label = f11-f20 final
datatype = DOUBLE
unit = Hz
def_value = 0.05E9
tooltip = Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[Coupling, 2QB #2-3]
label = Coupling
datatype = DOUBLE
unit = Hz
def_value = 0.025E9
tooltip = Coupling strength between |11> state and |02> state
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[L1, 2QB #2-3]
label = L1
datatype = DOUBLE
def_value = 1
tooltip = First fourier coefficient used to define the pulse shape of the C-phase gate.
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Fourier terms, 2QB
state_value_1 = One
state_value_2 = Two
state_value_3 = Three
state_value_4 = Four

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

[QB1 Phi, 2QB #2-3]
label = QB1 Phase shift (rad)
datatype = DOUBLE
def_value = 0
group = 2-QB pulse #2-3
section = 2-QB gates

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

[Negative amplitude, 2QB #2-3]
label = Negative amplitude
datatype = BOOLEAN
def_value = False
tooltip = Flip the sign of the amplitude of the CZ pulse
group = 2-QB pulse #2-3
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[Amplitude, 2QB #3-4]
label = Amplitude
datatype = DOUBLE
unit = V
def_value = 1.0
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = Gaussian
state_value_2 = Square
state_value_3 = Ramp
state_value_4 = Cosine
show_in_measurement_dlg = True

[Width, 2QB #3-4]
label = Width
datatype = DOUBLE
unit = s
def_value = 50E-9
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 0

[Plateau, 2QB #3-4]
label = Plateau
datatype = DOUBLE
unit = s
def_value = 0
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Uniform 2QB pulses
state_value = 0

[Assume linear dependence, 2QB #3-4]
label = Assume linear dependence
datatype = BOOLEAN
def_value = True
tooltip = Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[df/dV, 2QB #3-4]
label = df/dV
datatype = DOUBLE
unit = Hz/V
def_value = 0.5E9
tooltip = Translating pulseshape from frequency space to voltage assuming a linear dependence
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[f11-f20 initial, 2QB #3-4]
label = f11-f20 initial
datatype = DOUBLE
unit = Hz
def_value = 0.3E9
tooltip = Initial frequency splitting between the |11> state and the |02> state
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[f11-f20 final, 2QB #3-4]
label = f11-f20 final
datatype = DOUBLE
unit = Hz
def_value = 0.05E9
tooltip = Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[Coupling, 2QB #3-4]
label = Coupling
datatype = DOUBLE
unit = Hz
def_value = 0.025E9
tooltip = Coupling strength between |11> state and |02> state
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

[L1, 2QB #3-4]
label = L1
datatype = DOUBLE
def_value = 1
tooltip = First fourier coefficient used to define the pulse shape of the C-phase gate.
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Fourier terms, 2QB
state_value_1 = One
state_value_2 = Two
state_value_3 = Three
state_value_4 = Four

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

[Negative amplitude, 2QB #3-4]
label = Negative amplitude
datatype = BOOLEAN
def_value = False
tooltip = Flip the sign of the amplitude of the CZ pulse
group = 2-QB pulse #3-4
section = 2-QB gates
state_quant = Pulse type, 2QB
state_value_1 = CZ
state_value_2 = NetZero

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

[Ec #1]
datatype = DOUBLE
label = Ec
unit = Hz
def_value = 200E6
group = Qubit #1
section = QB spectra

[f01 max #1]
datatype = DOUBLE
label = f01 max
unit = Hz
def_value = 5E9
group = Qubit #1
section = QB spectra

[f01 min #1]
datatype = DOUBLE
label = f01 min
unit = Hz
def_value = 4E9
group = Qubit #1
section = QB spectra

[Vperiod #1]
datatype = DOUBLE
label = Voltage period
unit = V
def_value = 1
group = Qubit #1
section = QB spectra

[Voffset #1]
datatype = DOUBLE
label = Voltage offset
unit = V
def_value = 0
group = Qubit #1
section = QB spectra

[V0 #1]
datatype = DOUBLE
label = Voltage operating point
unit = V
def_value = 0
group = Qubit #1
section = QB spectra

[Ec #2]
datatype = DOUBLE
label = Ec
unit = Hz
def_value = 200E6
group = Qubit #2
section = QB spectra

[f01 max #2]
datatype = DOUBLE
label = f01 max
unit = Hz
def_value = 5E9
group = Qubit #2
section = QB spectra

[f01 min #2]
datatype = DOUBLE
label = f01 min
unit = Hz
def_value = 4E9
group = Qubit #2
section = QB spectra

[Vperiod #2]
datatype = DOUBLE
label = Voltage period
unit = V
def_value = 1
group = Qubit #2
section = QB spectra

[Voffset #2]
datatype = DOUBLE
label = Voltage offset
unit = V
def_value = 0
group = Qubit #2
section = QB spectra

[V0 #2]
datatype = DOUBLE
label = Voltage operating point
unit = V
def_value = 0
group = Qubit #2
section = QB spectra

[Ec #3]
datatype = DOUBLE
label = Ec
unit = Hz
def_value = 200E6
group = Qubit #3
section = QB spectra

[f01 max #3]
datatype = DOUBLE
label = f01 max
unit = Hz
def_value = 5E9
group = Qubit #3
section = QB spectra

[f01 min #3]
datatype = DOUBLE
label = f01 min
unit = Hz
def_value = 4E9
group = Qubit #3
section = QB spectra

[Vperiod #3]
datatype = DOUBLE
label = Voltage period
unit = V
def_value = 1
group = Qubit #3
section = QB spectra

[Voffset #3]
datatype = DOUBLE
label = Voltage offset
unit = V
def_value = 0
group = Qubit #3
section = QB spectra

[V0 #3]
datatype = DOUBLE
label = Voltage operating point
unit = V
def_value = 0
group = Qubit #3
section = QB spectra

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

[Generate process tomography prepulse]
datatype = BOOLEAN
def_value = 0
group = Tomography
section = Tomography

[Generate state tomography postpulse]
datatype = BOOLEAN
def_value = 0
group = Tomography
section = Tomography

[Tomography scheme]
label = Tomography scheme
datatype = COMBO
def_value = Single qubit
combo_def_1 = Single qubit
combo_def_2 = Two qubit (9 pulse set)
combo_def_3 = Two qubit (30 pulse set)
combo_def_4 = Two qubit (36 pulse set)
group = State tomography setup
section = Tomography

[Process tomography prepulse index 2-QB]
label = Prepulse index 2-QB
datatype = COMBO
def_value = 00: I-I
combo_def_1 = 00: I-I
combo_def_2 = 01: I-Xp
combo_def_3 = 0X: I-Y2p
combo_def_4 = 0Y: I-X2m
combo_def_5 = 10: Xp-I
combo_def_6 = 11: Xp-Xp
combo_def_7 = 1X: Xp-Y2p
combo_def_8 = 1Y: Xp-X2m
combo_def_9 = X0: Y2p-I
combo_def_10 = X1: Y2p-Xp
combo_def_11 = XX: Y2p-Y2p
combo_def_12 = XY: Y2p-X2m
combo_def_13 = Y0: X2m-I
combo_def_14 = Y1: X2m-Xp
combo_def_15 = YX: X2m-Y2p
combo_def_16 = YY: X2m-X2m
group = State tomography setup
section = Tomography
show_in_measurement_dlg = True
state_quant = Tomography scheme
state_value_1 = Two qubit (9 pulse set)
state_value_2 = Two qubit (30 pulse set)
state_value_3 = Two qubit (36 pulse set)

[Process tomography prepulse index 1-QB]
label = Prepulse index 1-QB
datatype = COMBO
def_value = 0: I
combo_def_1 = 0: I
combo_def_2 = 1: Xp
combo_def_3 = X: Y2p
combo_def_4 = Y: X2m
group = State tomography setup
section = Tomography
show_in_measurement_dlg = True
state_quant = Tomography scheme
state_value = Single qubit

[Tomography pulse index 1-QB]
label = Postpulse index 1-QB
datatype = COMBO
def_value = Z: I
combo_def_1 = Z: I
combo_def_2 = Y: X2p
combo_def_3 = X: Y2m
group = State tomography setup
section = Tomography
show_in_measurement_dlg = True
state_quant = Tomography scheme
state_value_1 = Single qubit

[Tomography pulse index 2-QB (9 pulse set)]
label = Postpulse index 2-QB
datatype = COMBO
def_value = XX: Y2m-Y2m
combo_def_1 = XX: Y2m-Y2m
combo_def_2 = YX: X2p-Y2m
combo_def_3 = ZX: I-Y2m
combo_def_4 = XY: Y2m-X2p
combo_def_5 = YY: X2p-X2p
combo_def_6 = ZY: I-X2p
combo_def_7 = XZ: Y2m-I
combo_def_8 = YZ: X2p-I
combo_def_9 = ZZ: I-I
group = State tomography setup
section = Tomography
show_in_measurement_dlg = True
state_quant = Tomography scheme
state_value = Two qubit (9 pulse set)

[Tomography pulse index 2-QB (30 pulse set)]
label = Postpulse index 2-QB
datatype = COMBO
def_value = I-I
combo_def_1 = I-I
combo_def_2 = Xp-I
combo_def_3 = I-Xp
combo_def_4 = X2p-I
combo_def_5 = X2p-X2p
combo_def_6 = X2p-Y2p
combo_def_7 = X2p-Xp
combo_def_8 = Y2p-I
combo_def_9 = Y2p-X2p
combo_def_10 = Y2p-Y2p
combo_def_11 = Y2p-Xp
combo_def_12 = I-X2p
combo_def_13 = Xp-X2p
combo_def_14 = I-Y2p
combo_def_15 = Xp-Y2p
combo_def_16 = I-I
combo_def_17 = Xm-I
combo_def_18 = I-Xm
combo_def_19 = X2m-I
combo_def_20 = X2m-X2m
combo_def_21 = X2m-Y2m
combo_def_22 = X2m-Xm
combo_def_23 = Y2m-I
combo_def_24 = Y2m-X2m
combo_def_25 = Y2m-Y2m
combo_def_26 = Y2m-Xm
combo_def_27 = I-X2m
combo_def_28 = Xm-X2m
combo_def_29 = I-Y2m
combo_def_30 = Xm-Y2m
group = State tomography setup
section = Tomography
show_in_measurement_dlg = True
state_quant = Tomography scheme
state_value = Two qubit (30 pulse set)

[Tomography pulse index 2-QB (36 pulse set)]
label = Postpulse index 2-QB
datatype = COMBO
def_value = I-I
combo_def_1 = I-I
combo_def_2 = Xp-I
combo_def_3 = X2p-I
combo_def_4 = X2m-I
combo_def_5 = Y2p-I
combo_def_6 = Y2m-I
combo_def_7 = Id-Xp
combo_def_8 = Xp-Xp
combo_def_9 = X2p-Xp
combo_def_10 = X2m-Xp
combo_def_11 = Y2p-Xp
combo_def_12 = Y2m-Xp
combo_def_13 = I-X2p
combo_def_14 = Xp-X2p
combo_def_15 = X2p-X2p
combo_def_16 = X2m-X2p
combo_def_17 = Y2p-Y2p
combo_def_18 = Y2m-Y2p
combo_def_19 = I-X2m
combo_def_20 = Xp-X2m
combo_def_21 = X2p-X2m
combo_def_22 = X2m-X2m
combo_def_23 = Y2p-X2m
combo_def_24 = Y2m-X2m
combo_def_25 = I-Y2p
combo_def_26 = Xp-Y2p
combo_def_27 = X2p-Y2p
combo_def_28 = X2m-Y2p
combo_def_29 = Y2p-Y2p
combo_def_30 = Y2m-Y2p
combo_def_31 = I-Y2m
combo_def_32 = Xp-Y2m
combo_def_33 = X2p-Y2m
combo_def_34 = X2m-Y2m
combo_def_35 = Y2p-Y2m
combo_def_36 = Y2m-Y2m
group = State tomography setup
section = Tomography
show_in_measurement_dlg = True
state_quant = Tomography scheme
state_value = Two qubit (36 pulse set)

[Qubit for tomography]
label = Qubit #
datatype = COMBO
def_value = 1
state_quant = Tomography scheme
state_value = Single qubit
group = Qubits for tomography
section = Tomography
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Qubit 1 for tomography]
label = Qubit 1 waveform #
datatype = COMBO
def_value = 1
state_quant = Tomography scheme
state_value_1 = Two qubit (9 pulse set)
state_value_2 = Two qubit (30 pulse set)
state_value_3 = Two qubit (36 pulse set)
group = Qubits for tomography
section = Tomography
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Qubit 2 for tomography]
label = Qubit 2 waveform #
datatype = COMBO
def_value = 2
state_quant = Tomography scheme
state_value_1 = Two qubit (9 pulse set)
state_value_2 = Two qubit (30 pulse set)
state_value_3 = Two qubit (36 pulse set)
group = Qubits for tomography
section = Tomography
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Predistort waveforms]
datatype = BOOLEAN
def_value = 0
group = XY Predistortion
section = Predistortion

[Transfer function #1]
datatype = PATH
group = XY Predistortion
section = Predistortion

[Transfer function #2]
datatype = PATH
group = XY Predistortion
section = Predistortion

[Transfer function #3]
datatype = PATH
group = XY Predistortion
section = Predistortion

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

[Predistort Z]
datatype = BOOLEAN
def_value = 0
group = Z predistortion
section = Predistortion

[Predistort Z1 - A1]
label = A1
datatype = DOUBLE
group = Z1
section = Predistortion

[Predistort Z1 - tau1]
label = tau1
datatype = DOUBLE
group = Z1
section = Predistortion

[Predistort Z1 - A2]
label = A2
datatype = DOUBLE
group = Z1
section = Predistortion

[Predistort Z1 - tau2]
label = tau2
datatype = DOUBLE
group = Z1
section = Predistortion

[Predistort Z1 - A3]
label = A3
datatype = DOUBLE
group = Z1
section = Predistortion

[Predistort Z1 - tau3]
label = tau3
datatype = DOUBLE
group = Z1
section = Predistortion

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

[Compensate cross-talk]
datatype = BOOLEAN
def_value = 0
group = Cross-talk
section = Cross-talk

[Cross-talk (CT) matrix]
datatype = PATH
group = Cross-talk
section = Cross-talk

[1-1 QB <--> Crosstalk matrix]
tooltip = One-to-one QB to Cross-talk matrix element correspondence
datatype = BOOLEAN
def_value = True
group = Cross-talk
section = Cross-talk

[CT-matrix element #1]
tooltip = Which QB/output corresponds to which element of the cross-talk matrix
datatype = COMBO
def_value = None
state_quant = 1-1 QB <--> Crosstalk matrix
state_value = False
group = Cross-talk
section = Cross-talk
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16
combo_def_17 = None

[CT-matrix element #2]
tooltip = Which QB/output corresponds to which element of the cross-talk matrix
datatype = COMBO
def_value = None
state_quant = 1-1 QB <--> Crosstalk matrix
state_value = False
group = Cross-talk
section = Cross-talk
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16
combo_def_17 = None

[CT-matrix element #3]
tooltip = Which QB/output corresponds to which element of the cross-talk matrix
datatype = COMBO
def_value = None
state_quant = 1-1 QB <--> Crosstalk matrix
state_value = False
group = Cross-talk
section = Cross-talk
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16
combo_def_17 = None

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

[Number of readout waveforms]
label = Number of waveforms
datatype = COMBO
def_value = 1
group = Readout
section = Readout
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Readout pulse type]
datatype = COMBO
combo_def_1 = Gaussian
combo_def_2 = Square
combo_def_3 = Ramp
combo_def_4 = Cosine
def_value = Square
group = Readout
section = Readout

[Readout truncation range]
datatype = DOUBLE
def_value = 3
state_quant = Readout pulse type
state_value_1 = Gaussian
group = Readout
section = Readout

[Readout start at zero]
label = Start at zero
datatype = BOOLEAN
def_value = 0
state_quant = Readout pulse type
state_value_1 = Gaussian
group = Readout
section = Readout

[Uniform readout amplitude]
label = Uniform amplitude
datatype = BOOLEAN
def_value = True
group = Readout
section = Readout

[Readout amplitude]
label = Amplitude
datatype = DOUBLE
def_value = 0.1
unit = V
state_quant = Uniform readout amplitude
state_value = True
group = Readout
section = Readout

[Uniform readout pulse shape]
label = Uniform pulse shape
datatype = BOOLEAN
def_value = True
group = Readout
section = Readout

[Readout width]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
state_quant = Uniform readout pulse shape
state_value_1 = True
group = Readout
section = Readout
show_in_measurement_dlg = True

[Readout duration]
label = Duration
datatype = DOUBLE
def_value = 2E-6
unit = s
state_quant = Uniform readout pulse shape
state_value_1 = True
group = Readout
section = Readout

[Match main sequence waveform size]
datatype = BOOLEAN
tooltip = If checked, the readout waveform will have the same number of point as the main pulse waveforms
def_value = True
group = Readout
section = Readout

[Distribute readout phases]
datatype = BOOLEAN
tooltip = If checked, the readout tone phases will be distributed to avoid large peak-to-peak voltages
def_value = 0
group = Readout
section = Readout

[Readout delay]
datatype = DOUBLE
unit = s
group = Readout
section = Readout
show_in_measurement_dlg = True

[Readout I/Q ratio 1]
datatype = DOUBLE
def_value = 1.0
tooltip = Ratio of I/Q voltages to compensate for I/Q mixer arm imbalance.
state_quant = Number of readout waveforms
group = Readout waveform 1
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Readout IQ skew 1]
label = IQ skew 1
unit = deg
tooltip = Readout IQ mixer phase skew
datatype = DOUBLE
def_value = 0
state_quant = Number of readout waveforms
group = Readout waveform 1
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Readout offset - I1]
label = Offset I1
tooltip = Readout mixer I offset
datatype = DOUBLE
def_value = 0
unit = V
state_quant = Number of readout waveforms
group = Readout waveform 1
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Readout offset - Q1]
label = Offset Q1
tooltip = Readout mixer Q offset
datatype = DOUBLE
def_value = 0
unit = V
state_quant = Number of readout waveforms
group = Readout waveform 1
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Readout I/Q ratio 2]
datatype = DOUBLE
def_value = 1.0
tooltip = Ratio of I/Q voltages to compensate for I/Q mixer arm imbalance.
state_quant = Number of readout waveforms
group = Readout waveform 2
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Readout IQ skew 2]
label = IQ skew 2
unit = deg
tooltip = Readout IQ mixer phase skew
datatype = DOUBLE
def_value = 0
state_quant = Number of readout waveforms
group = Readout waveform 2
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Readout offset - I2]
label = Offset I2
tooltip = Readout mixer I offset
datatype = DOUBLE
def_value = 0
unit = V
state_quant = Number of readout waveforms
group = Readout waveform 2
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Readout offset - Q2]
label = Offset Q2
tooltip = Readout mixer Q offset
datatype = DOUBLE
def_value = 0
unit = V
state_quant = Number of readout waveforms
group = Readout waveform 2
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Readout I/Q ratio 3]
datatype = DOUBLE
def_value = 1.0
tooltip = Ratio of I/Q voltages to compensate for I/Q mixer arm imbalance.
state_quant = Number of readout waveforms
group = Readout waveform 3
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

[Readout IQ skew 3]
label = IQ skew 3
unit = deg
tooltip = Readout IQ mixer phase skew
datatype = DOUBLE
def_value = 0
state_quant = Number of readout waveforms
group = Readout waveform 3
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

[Readout offset - I3]
label = Offset I3
tooltip = Readout mixer I offset
datatype = DOUBLE
def_value = 0
unit = V
state_quant = Number of readout waveforms
group = Readout waveform 3
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

[Readout offset - Q3]
label = Offset Q3
tooltip = Readout mixer Q offset
datatype = DOUBLE
def_value = 0
unit = V
state_quant = Number of readout waveforms
group = Readout waveform 3
section = Readout
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

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

[Readout amplitude #1]
label = Amplitude
datatype = DOUBLE
def_value = 0.1
unit = V
state_quant = Uniform readout amplitude
state_value_1 = False
group = Readout #1
section = Readout

[Readout width #1]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
state_quant = Uniform readout pulse shape
state_value_1 = False
group = Readout #1
section = Readout
show_in_measurement_dlg = True

[Readout duration #1]
label = Duration
datatype = DOUBLE
def_value = 2E-6
unit = s
state_quant = Uniform readout pulse shape
state_value_1 = False
group = Readout #1
section = Readout

[Readout frequency #1]
label = Frequency
datatype = DOUBLE
def_value = 0.0
unit = Hz
group = Readout #1
section = Readout

[Readout target #1]
label = Waveform target
datatype = COMBO
def_value = 1
group = Readout #1
section = Readout
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Readout amplitude #2]
label = Amplitude
datatype = DOUBLE
def_value = 0.1
unit = V
state_quant = Uniform readout amplitude
state_value_1 = False
group = Readout #2
section = Readout

[Readout width #2]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
state_quant = Uniform readout pulse shape
state_value_1 = False
group = Readout #2
section = Readout
show_in_measurement_dlg = True

[Readout duration #2]
label = Duration
datatype = DOUBLE
def_value = 2E-6
unit = s
state_quant = Uniform readout pulse shape
state_value_1 = False
group = Readout #2
section = Readout

[Readout frequency #2]
label = Frequency
datatype = DOUBLE
def_value = 0.0
unit = Hz
group = Readout #2
section = Readout

[Readout target #2]
label = Waveform target
datatype = COMBO
def_value = 1
group = Readout #2
section = Readout
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

[Readout amplitude #3]
label = Amplitude
datatype = DOUBLE
def_value = 0.1
unit = V
state_quant = Uniform readout amplitude
state_value_1 = False
group = Readout #3
section = Readout

[Readout width #3]
label = Width
datatype = DOUBLE
unit = s
def_value = 10E-9
state_quant = Uniform readout pulse shape
state_value_1 = False
group = Readout #3
section = Readout
show_in_measurement_dlg = True

[Readout duration #3]
label = Duration
datatype = DOUBLE
def_value = 2E-6
unit = s
state_quant = Uniform readout pulse shape
state_value_1 = False
group = Readout #3
section = Readout

[Readout frequency #3]
label = Frequency
datatype = DOUBLE
def_value = 0.0
unit = Hz
group = Readout #3
section = Readout

[Readout target #3]
label = Waveform target
datatype = COMBO
def_value = 1
group = Readout #3
section = Readout
combo_def_1 = 1
combo_def_2 = 2
combo_def_3 = 3
combo_def_4 = 4
combo_def_5 = 5
combo_def_6 = 6
combo_def_7 = 7
combo_def_8 = 8
combo_def_9 = 9
combo_def_10 = 10
combo_def_11 = 11
combo_def_12 = 12
combo_def_13 = 13
combo_def_14 = 14
combo_def_15 = 15
combo_def_16 = 16

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

[Predistort readout waveform]
datatype = BOOLEAN
tooltip = If checked, the readout waveform will be predistorted to increase the rise time
def_value = 0
group = Readout predistortion
section = Readout

[Resonator linewidth]
datatype = DOUBLE
def_value = 1E6
unit = Hz
tooltip = Measured resonator linewidth
state_quant = Predistort readout waveform
state_value = 1
group = Readout predistortion
section = Readout

[Target rise time]
datatype = DOUBLE
def_value = 50E-9
unit = s
tooltip = Intended resonator ring-up time
state_quant = Predistort readout waveform
state_value = 1
group = Readout predistortion
section = Readout

[Generate readout trig]
datatype = BOOLEAN
group = Readout trig
section = Readout

[Readout trig amplitude]
datatype = DOUBLE
def_value = 1.0
unit = V
group = Readout trig
section = Readout

[Readout trig duration]
datatype = DOUBLE
def_value = 20E-9
unit = s
group = Readout trig
section = Readout

[Swap IQ]
datatype = BOOLEAN
group = Output
section = Output

[Generate gate]
datatype = BOOLEAN
def_value = 1
group = Microwave gate switch
section = Output

[Uniform gate]
datatype = BOOLEAN
def_value = 0
state_quant = Generate gate
state_value = 1
group = Microwave gate switch
section = Output

[External gate]
datatype = BOOLEAN
def_value = 0
state_quant = Generate gate
state_value = 1
second_state_quant = Generate waveform primitives
second_state_value = 1
group = Microwave gate switch
section = Output
tooltip = Gate and control are generated by different hardware. Only applicable when using primitives.

[Gate delay]
datatype = DOUBLE
unit = s
def_value = -60E-9
low_lim = -1E-6
high_lim = 1E-6
group = Microwave gate switch
section = Output

[Gate overlap]
datatype = DOUBLE
unit = s
def_value = 20E-9
group = Microwave gate switch
section = Output

[Minimal gate time]
datatype = DOUBLE
unit = s
def_value = 20E-9
group = Microwave gate switch
section = Output

[Filter gate waveforms]
datatype = BOOLEAN
def_value = False
group = Output filters
section = Output

[Gate filter]
datatype = COMBO
def_value = Hanning
combo_def_1 = Rectangular
combo_def_2 = Bartlett
combo_def_3 = Blackman
combo_def_4 = Hamming
combo_def_5 = Hanning
combo_def_6 = Kaiser
state_quant = Filter gate waveforms
state_value_1 = 1
group = Output filters
section = Output

[Gate - Filter size]
label = Filter size
datatype = DOUBLE
def_value = 5
low_lim = 1
state_quant = Filter gate waveforms
state_value_1 = 1
group = Output filters
section = Output

[Gate - Kaiser beta]
label = Kaiser beta parameter
datatype = DOUBLE
def_value = 14.0
state_quant = Gate filter
state_value_1 = Kaiser
group = Output filters
section = Output

[Filter Z waveforms]
datatype = BOOLEAN
def_value = False
group = Output filters
section = Output

[Z filter]
datatype = COMBO
def_value = Hanning
combo_def_1 = Rectangular
combo_def_2 = Bartlett
combo_def_3 = Blackman
combo_def_4 = Hamming
combo_def_5 = Hanning
combo_def_6 = Kaiser
state_quant = Filter Z waveforms
state_value_1 = 1
group = Output filters
section = Output

[Z - Filter size]
label = Filter size
datatype = DOUBLE
def_value = 5
low_lim = 1
state_quant = Filter Z waveforms
state_value_1 = 1
group = Output filters
section = Output

[Z - Kaiser beta]
label = Kaiser beta parameter
datatype = DOUBLE
def_value = 14.0
state_quant = Z filter
state_value_1 = Kaiser
group = Output filters
section = Output

[Trace - I1]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Trace - Q1]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Trace - G1]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Trace - Z1]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Trace - I2]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Trace - Q2]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

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

[Trace - Z2]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

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

[Trace - Q3]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

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

[Trace - Z3]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
state_quant = Number of qubits
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

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

[Trace - Readout trig]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True

[Trace - Readout I1]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = READ
state_quant = Number of readout waveforms
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Trace - Readout Q1]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = READ
state_quant = Number of readout waveforms
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Trace - Readout I2]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = READ
state_quant = Number of readout waveforms
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Trace - Readout Q2]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = READ
state_quant = Number of readout waveforms
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Trace - Readout I3]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = READ
state_quant = Number of readout waveforms
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

[Trace - Readout Q3]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = READ
state_quant = Number of readout waveforms
group = Traces
section = Output
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

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

[Waveform primitives]
datatype = VECTOR
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_quant = Generate waveform primitives
state_value = True

[Control sequence]
datatype = VECTOR
permission = READ
group = Traces
section = Output
show_in_measurement_dlg = True
state_quant = Generate waveform primitives
state_value = True

[Demodulation - Skip]
label = Skip start
datatype = DOUBLE
def_value = 0.0
unit = s
section = (Legacy) Demodulation
group = (Legacy) Demodulation

[Demodulation - Length]
label = Length
datatype = DOUBLE
def_value = 1E-6
unit = s
section = (Legacy) Demodulation
group = (Legacy) Demodulation

[Demodulation - Frequency offset]
label = Frequency offset
datatype = DOUBLE
def_value = 0
unit = Hz
tooltip = Frequency difference between LO used for up- and downconversion, f_down - f_up
section = (Legacy) Demodulation
group = (Legacy) Demodulation

[Demodulation - Number of records]
label = Number of records
datatype = DOUBLE
def_value = 1
low_lim = 1
tooltip = NB!  This will be removed in future versions, records should be set by input waveform
section = (Legacy) Demodulation
group = (Legacy) Demodulation

[Use phase reference signal]
datatype = BOOLEAN
def_value = True
section = (Legacy) Demodulation
group = (Legacy) Demodulation

[Demodulation - IQ]
datatype = BOOLEAN
def_value = False
section = (Legacy) Demodulation
group = (Legacy) Demodulation

[Demodulation - Input]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = WRITE
state_quant = Demodulation - IQ
state_value = False
section = (Legacy) Demodulation
group = (Legacy) Demodulation
show_in_measurement_dlg = True

[Demodulation - Input I]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = WRITE
state_quant = Demodulation - IQ
state_value = True
section = (Legacy) Demodulation
group = (Legacy) Demodulation
show_in_measurement_dlg = True

[Demodulation - Input Q]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = WRITE
state_quant = Demodulation - IQ
state_value = True
section = (Legacy) Demodulation
group = (Legacy) Demodulation
show_in_measurement_dlg = True

[Demodulation - Reference]
unit = V
x_name = Time
x_unit = s
datatype = VECTOR
permission = WRITE
section = (Legacy) Demodulation
group = (Legacy) Demodulation
show_in_measurement_dlg = True

[Voltage, QB1]
unit = V
datatype = COMPLEX
state_quant = Number of qubits
permission = READ
group = (Legacy) Demodulation
section = (Legacy) Demodulation
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Single-shot, QB1]
unit = V
datatype = VECTOR_COMPLEX
state_quant = Number of qubits
permission = READ
group = (Legacy) Demodulation
section = (Legacy) Demodulation
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2
state_value_64 = 1

[Voltage, QB2]
unit = V
datatype = COMPLEX
state_quant = Number of qubits
permission = READ
group = (Legacy) Demodulation
section = (Legacy) Demodulation
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Single-shot, QB2]
unit = V
datatype = VECTOR_COMPLEX
state_quant = Number of qubits
permission = READ
group = (Legacy) Demodulation
section = (Legacy) Demodulation
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3
state_value_63 = 2

[Voltage, QB3]
unit = V
datatype = COMPLEX
state_quant = Number of qubits
permission = READ
group = (Legacy) Demodulation
section = (Legacy) Demodulation
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

[Single-shot, QB3]
unit = V
datatype = VECTOR_COMPLEX
state_quant = Number of qubits
permission = READ
group = (Legacy) Demodulation
section = (Legacy) Demodulation
show_in_measurement_dlg = True
state_value_1 = 64
state_value_2 = 63
state_value_3 = 62
state_value_4 = 61
state_value_5 = 60
state_value_6 = 59
state_value_7 = 58
state_value_8 = 57
state_value_9 = 56
state_value_10 = 55
state_value_11 = 54
state_value_12 = 53
state_value_13 = 52
state_value_14 = 51
state_value_15 = 50
state_value_16 = 49
state_value_17 = 48
state_value_18 = 47
state_value_19 = 46
state_value_20 = 45
state_value_21 = 44
state_value_22 = 43
state_value_23 = 42
state_value_24 = 41
state_value_25 = 40
state_value_26 = 39
state_value_27 = 38
state_value_28 = 37
state_value_29 = 36
state_value_30 = 35
state_value_31 = 34
state_value_32 = 33
state_value_33 = 32
state_value_34 = 31
state_value_35 = 30
state_value_36 = 29
state_value_37 = 28
state_value_38 = 27
state_value_39 = 26
state_value_40 = 25
state_value_41 = 24
state_value_42 = 23
state_value_43 = 22
state_value_44 = 21
state_value_45 = 20
state_value_46 = 19
state_value_47 = 18
state_value_48 = 17
state_value_49 = 16
state_value_50 = 15
state_value_51 = 14
state_value_52 = 13
state_value_53 = 12
state_value_54 = 11
state_value_55 = 10
state_value_56 = 9
state_value_57 = 8
state_value_58 = 7
state_value_59 = 6
state_value_60 = 5
state_value_61 = 4
state_value_62 = 3

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#######################
# Heralding
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

[Activate Heralding]
datatype: BOOLEAN
def_value: 0
group: Heralding
section: Heralding

[Delay after heralding]
datatype: DOUBLE
unit: s
def_value: 20E-9
low_lim: 0
group: Heralding
section: Heralding
show_in_measurement_dlg: True

[Heralding amplitude factor]
datatype: DOUBLE
def_value: 1
group: Heralding
section: Heralding

[Heralding duration factor]
datatype: DOUBLE
def_value: 1
group: Heralding
section: Heralding
