# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: iTestBE2142

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path:



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# If using ethernet, this instrument only works through a specific port
tcpip_specify_port = True
tcpip_port = 5025
term_char = LF

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2


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
[Range 1 (V)]
datatype: COMBO
def_value: 1.2 V
combo_def_1: 1.2 V
combo_def_2: 12 V
cmd_def_1: 1.2
cmd_def_2: 12
set_cmd: i1;c1;VOLT:RANGE

[Output 1]
datatype: BOOLEAN
def_value: False
set_cmd: i1;c1;OUTP

[Voltage 1]
datatype: DOUBLE
unit: V
low_lim: -12
high_lim: 12
set_cmd: i1;c1;VOLT

[RampMode 1]
datatype: DOUBLE
set_cmd: i1;c1;TRIG:IN

[RampRate 1]
datatype: DOUBLE
unit: V/ms
low_lim: 0
high_lim: 50e-3
set_cmd: i1;c1;VOLT:SLOP

[StartRamp 1]
datatype: BUTTON
set_cmd: i1;c1;TRIG:IN:INIT

[Range 2 (V)]
datatype: COMBO
def_value: 12 V
combo_def_1: 1.2 V
combo_def_2: 12 V
cmd_def_1: 1.2
cmd_def_2: 12
set_cmd: i1;c2;VOLT:RANGE

[Output 2]
datatype: BOOLEAN
def_value: False
set_cmd: i1;c2;OUTP

[Voltage 2]
datatype: DOUBLE
unit: V
low_lim: -12
high_lim: 12
set_cmd: i1;c2;VOLT

[RampMode 2]
datatype: DOUBLE
set_cmd: i1;c2;TRIG:IN

[RampRate 2]
datatype: DOUBLE
unit: V/ms
low_lim: 0
high_lim: 50e-3
set_cmd: i1;c2;VOLT:SLOP

[StartRamp 2]
datatype: BUTTON
set_cmd: i1;c2;TRIG:IN:INIT